# Generated by Configurator on Thu Mar 06 20:27:53 CET 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,Spectra,LumencorSpectra,Spectra
Device,Andor sCMOS Camera,AndorSDK3,Andor sCMOS Camera
Device,TIScope,NikonTI,TIScope
Device,TIAnalyzer,NikonTI,TIAnalyzer
Device,TINosePiece,NikonTI,TINosePiece
Device,TICondenserCassette,NikonTI,TICondenserCassette
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,SutterHub,SutterLambda2,SutterHub
Device,FilterWheel,SutterLambda2,Wheel-A
Device,NIDAQHub,NIDAQ,NIDAQHub
Device,NIDAQDO-Dev1/port0,NIDAQ,NIDAQDO-Dev1/port0
Device,TTL_Shutter,Utilities,State Device Shutter

# Pre-init settings for devices
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,128000
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,Spectra,Port,COM3
Property,Spectra,SetLE_Type,SpectraX
Property,SutterHub,Port,COM4
Property,NIDAQHub,Device,Dev1
Property,NIDAQHub,MaxSequenceLength,1024
Property,NIDAQDO-Dev1/port0,Input Line,31
Property,NIDAQDO-Dev1/port0,Line # of first slider,0
Property,NIDAQDO-Dev1/port0,Nr of TTL Sliders,8
Property,NIDAQDO-Dev1/port0,Sequencing,Use hub setting

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIAnalyzer,TIScope
Parent,TINosePiece,TIScope
Parent,TICondenserCassette,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,FilterWheel,SutterHub
Parent,NIDAQDO-Dev1/port0,NIDAQHub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TIFilterBlock1,250.0

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,Andor sCMOS Camera
Property,Core,Shutter,TTL_Shutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo VC 100x NA 1.40 Oil
Label,TINosePiece,4,5-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,3,4-Plan Apo 40x NA 0.95 Dry
Label,TINosePiece,2,3-Plan Apo 20x NA 0.75 Dry
Label,TINosePiece,1,2-Plan Apo 10x NA 0.45 Dry
Label,TINosePiece,0,1-S Plan Fluor 20x NA 0.45 Dry
# TICondenserCassette
Label,TICondenserCassette,4,5------
Label,TICondenserCassette,3,4------
Label,TICondenserCassette,2,3-DICN2
Label,TICondenserCassette,1,2-Ph1
Label,TICondenserCassette,0,1------
# TIFilterBlock1
Label,TIFilterBlock1,5,6-ANALY
Label,TIFilterBlock1,4,5-mKO 2
Label,TIFilterBlock1,3,4-59222
Label,TIFilterBlock1,2,3-465 D
Label,TIFilterBlock1,1,2-89000
Label,TIFilterBlock1,0,1-89006
# TILightPath
Label,TILightPath,3,4-Bottom100
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# FilterWheel
Label,FilterWheel,9,705/72
Label,FilterWheel,8,632/60
Label,FilterWheel,7,605/52
Label,FilterWheel,6,535/36
Label,FilterWheel,5,525/36
Label,FilterWheel,4,480/40
Label,FilterWheel,3,470/24
Label,FilterWheel,2,455/50
Label,FilterWheel,1,Empty2
Label,FilterWheel,0,Empty1

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Spectra,State,1
ConfigGroup,System,Startup,Andor sCMOS Camera,Binning,2x2
ConfigGroup,System,Startup,TIXYDrive,SpeedX,1
ConfigGroup,System,Startup,TIXYDrive,SpeedY,1
ConfigGroup,System,Startup,TIXYDrive,ToleranceX,0
ConfigGroup,System,Startup,TIXYDrive,ToleranceY,0
ConfigGroup,System,Startup,FilterWheel,Delay_ms,100.0000
ConfigGroup,System,Startup,FilterWheel,State Change Speed,3
ConfigGroup,System,Startup,TILightPath,Label,3-Right100
ConfigGroup,System,Startup,TTL_Shutter,State Device,NIDAQDO-Dev1/port0
ConfigGroup,System,Startup,Andor sCMOS Camera,PixelReadoutRate,200 MHz - lowest noise
ConfigGroup,System,Startup,Andor sCMOS Camera,RollingShutterGlobalClear,Off
ConfigGroup,System,Startup,Andor sCMOS Camera,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)


# Group: TTL
# Preset: mRuby
ConfigGroup,TTL,mRuby,TIFilterBlock1,Label,2-89000
ConfigGroup,TTL,mRuby,FilterWheel,Label,632/60
ConfigGroup,TTL,mRuby,NIDAQDO-Dev1/port0,line0,0
ConfigGroup,TTL,mRuby,NIDAQDO-Dev1/port0,line1,0
ConfigGroup,TTL,mRuby,NIDAQDO-Dev1/port0,line2,0
ConfigGroup,TTL,mRuby,NIDAQDO-Dev1/port0,line3,0
ConfigGroup,TTL,mRuby,NIDAQDO-Dev1/port0,line4,1
ConfigGroup,TTL,mRuby,NIDAQDO-Dev1/port0,line5,0
ConfigGroup,TTL,mRuby,NIDAQDO-Dev1/port0,line6,0
ConfigGroup,TTL,mRuby,NIDAQDO-Dev1/port0,line7,0

# Preset: miRFP
ConfigGroup,TTL,miRFP,TIFilterBlock1,Label,2-89000
ConfigGroup,TTL,miRFP,FilterWheel,Label,705/72
ConfigGroup,TTL,miRFP,NIDAQDO-Dev1/port0,line0,0
ConfigGroup,TTL,miRFP,NIDAQDO-Dev1/port0,line1,0
ConfigGroup,TTL,miRFP,NIDAQDO-Dev1/port0,line2,0
ConfigGroup,TTL,miRFP,NIDAQDO-Dev1/port0,line3,0
ConfigGroup,TTL,miRFP,NIDAQDO-Dev1/port0,line4,0
ConfigGroup,TTL,miRFP,NIDAQDO-Dev1/port0,line5,0
ConfigGroup,TTL,miRFP,NIDAQDO-Dev1/port0,line6,1
ConfigGroup,TTL,miRFP,NIDAQDO-Dev1/port0,line7,0

# Preset: CyanStim
ConfigGroup,TTL,CyanStim,TIFilterBlock1,Label,2-89000
ConfigGroup,TTL,CyanStim,FilterWheel,Label,Empty2
ConfigGroup,TTL,CyanStim,NIDAQDO-Dev1/port0,line0,0
ConfigGroup,TTL,CyanStim,NIDAQDO-Dev1/port0,line1,1
ConfigGroup,TTL,CyanStim,NIDAQDO-Dev1/port0,line2,0
ConfigGroup,TTL,CyanStim,NIDAQDO-Dev1/port0,line3,0
ConfigGroup,TTL,CyanStim,NIDAQDO-Dev1/port0,line4,0
ConfigGroup,TTL,CyanStim,NIDAQDO-Dev1/port0,line5,0
ConfigGroup,TTL,CyanStim,NIDAQDO-Dev1/port0,line6,0
ConfigGroup,TTL,CyanStim,NIDAQDO-Dev1/port0,line7,0

# Preset: BF
ConfigGroup,TTL,BF,TIFilterBlock1,Label,1-89006
ConfigGroup,TTL,BF,FilterWheel,Label,Empty2
ConfigGroup,TTL,BF,NIDAQDO-Dev1/port0,line0,0
ConfigGroup,TTL,BF,NIDAQDO-Dev1/port0,line1,0
ConfigGroup,TTL,BF,NIDAQDO-Dev1/port0,line2,0
ConfigGroup,TTL,BF,NIDAQDO-Dev1/port0,line3,0
ConfigGroup,TTL,BF,NIDAQDO-Dev1/port0,line4,0
ConfigGroup,TTL,BF,NIDAQDO-Dev1/port0,line5,0
ConfigGroup,TTL,BF,NIDAQDO-Dev1/port0,line6,0
ConfigGroup,TTL,BF,NIDAQDO-Dev1/port0,line7,1

# Preset: mCitrine
ConfigGroup,TTL,mCitrine,TIFilterBlock1,Label,2-89000
ConfigGroup,TTL,mCitrine,FilterWheel,Label,525/36
ConfigGroup,TTL,mCitrine,NIDAQDO-Dev1/port0,line0,0
ConfigGroup,TTL,mCitrine,NIDAQDO-Dev1/port0,line1,0
ConfigGroup,TTL,mCitrine,NIDAQDO-Dev1/port0,line2,1
ConfigGroup,TTL,mCitrine,NIDAQDO-Dev1/port0,line3,0
ConfigGroup,TTL,mCitrine,NIDAQDO-Dev1/port0,line4,0
ConfigGroup,TTL,mCitrine,NIDAQDO-Dev1/port0,line5,0
ConfigGroup,TTL,mCitrine,NIDAQDO-Dev1/port0,line6,0
ConfigGroup,TTL,mCitrine,NIDAQDO-Dev1/port0,line7,0



# PixelSize settings

