# Generated by Configurator on Mon Mar 30 21:12:14 CEST 2026

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,LED,LumencorSpectra,Spectra
Device,Wheel-A,SutterLambda,Wheel-A
Device,TTL,Utilities,State Device Shutter
Device,Mosaic3,Mosaic3,Mosaic3
Device,Camera,PVCAM,Camera-1
Device,NIDAQHub,NIDAQ,NIDAQHub
Device,NIDAQDO-Dev1/port0,NIDAQ,NIDAQDO-Dev1/port0

# Pre-init settings for devices
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,128000
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Enable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,LED,Port,COM3
Property,LED,SetLE_Type,SpectraX
Property,Wheel-A,Port,COM4
Property,Wheel-A,Timeout(ms),500
Property,NIDAQHub,Device,Dev1
Property,NIDAQHub,MaxSequenceLength,1024
Property,NIDAQDO-Dev1/port0,Input Line,7
Property,NIDAQDO-Dev1/port0,Line # of first slider,0
Property,NIDAQDO-Dev1/port0,Nr of TTL Sliders,7
Property,NIDAQDO-Dev1/port0,Sequencing,Use hub setting

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,NIDAQDO-Dev1/port0,NIDAQHub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TIFilterBlock1,250.0

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,TTL
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,S Plan Fluor 20x NA 0.45 Dry
Label,TINosePiece,4,Plan Apo VC 60x NA 1.40 Oil
Label,TINosePiece,3,Plan Apo 40x NA 0.95 Dry
Label,TINosePiece,2,Plan Apo 20x NA 0.75 Dry
Label,TINosePiece,1,Plan Apo 10x NA 0.45 Dry
Label,TINosePiece,0,Plan Fluor 4x NA 0.13 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,zt 442/514/561
Label,TIFilterBlock1,4,470lp
Label,TIFilterBlock1,3,69308 - CFP/YFP/mCherry - ET
Label,TIFilterBlock1,2,59222 - GFP/mCherry - ET
Label,TIFilterBlock1,1,86000v2 - Sedat Quad
Label,TIFilterBlock1,0,89402bs
# TILightPath
Label,TILightPath,3,Left80
Label,TILightPath,2,Right100
Label,TILightPath,1,Left100
Label,TILightPath,0,Eye100
# Wheel-A
Label,Wheel-A,9,Block
Label,Wheel-A,8,640/30
Label,Wheel-A,7,69008m_455-480_520-550_600-670
Label,Wheel-A,6,528/38
Label,Wheel-A,5,470/24
Label,Wheel-A,4,480/40
Label,Wheel-A,3,59022_495-545_605-665
Label,Wheel-A,2,89402_420-450_500-530_575-610
Label,Wheel-A,1,is_empty
Label,Wheel-A,0,Block
# NIDAQDO-Dev1/port0
Label,NIDAQDO-Dev1/port0,64,BF
Label,NIDAQDO-Dev1/port0,16,GreenYellow
Label,NIDAQDO-Dev1/port0,62,White
Label,NIDAQDO-Dev1/port0,126,AllOn
Label,NIDAQDO-Dev1/port0,32,Red
Label,NIDAQDO-Dev1/port0,8,Teal
Label,NIDAQDO-Dev1/port0,4,Cyan
Label,NIDAQDO-Dev1/port0,2,Blue
Label,NIDAQDO-Dev1/port0,1,Violet
Label,NIDAQDO-Dev1/port0,0,OFF

# Configuration presets
# Group: TurquoiseNeonGreenRubymiRFP
# Preset: mTurquoise
ConfigGroup,TurquoiseNeonGreenRubymiRFP,mTurquoise,TIFilterBlock1,Label,470lp
ConfigGroup,TurquoiseNeonGreenRubymiRFP,mTurquoise,Wheel-A,Label,470/24
ConfigGroup,TurquoiseNeonGreenRubymiRFP,mTurquoise,NIDAQDO-Dev1/port0,State,2

# Preset: mNeongreen
ConfigGroup,TurquoiseNeonGreenRubymiRFP,mNeongreen,TIFilterBlock1,Label,86000v2 - Sedat Quad
ConfigGroup,TurquoiseNeonGreenRubymiRFP,mNeongreen,Wheel-A,Label,528/38
ConfigGroup,TurquoiseNeonGreenRubymiRFP,mNeongreen,NIDAQDO-Dev1/port0,State,4

# Preset: miRFP
ConfigGroup,TurquoiseNeonGreenRubymiRFP,miRFP,TIFilterBlock1,Label,89402bs
ConfigGroup,TurquoiseNeonGreenRubymiRFP,miRFP,Wheel-A,Label,89402_420-450_500-530_575-610
ConfigGroup,TurquoiseNeonGreenRubymiRFP,miRFP,NIDAQDO-Dev1/port0,State,32

# Preset: CyanStim
ConfigGroup,TurquoiseNeonGreenRubymiRFP,CyanStim,TIFilterBlock1,Label,89402bs
ConfigGroup,TurquoiseNeonGreenRubymiRFP,CyanStim,Wheel-A,Label,is_empty
ConfigGroup,TurquoiseNeonGreenRubymiRFP,CyanStim,NIDAQDO-Dev1/port0,State,4

# Preset: BF
ConfigGroup,TurquoiseNeonGreenRubymiRFP,BF,TIFilterBlock1,Label,89402bs
ConfigGroup,TurquoiseNeonGreenRubymiRFP,BF,Wheel-A,Label,89402_420-450_500-530_575-610
ConfigGroup,TurquoiseNeonGreenRubymiRFP,BF,NIDAQDO-Dev1/port0,State,64

# Preset: mRuby2
ConfigGroup,TurquoiseNeonGreenRubymiRFP,mRuby2,TIFilterBlock1,Label,89402bs
ConfigGroup,TurquoiseNeonGreenRubymiRFP,mRuby2,Wheel-A,Label,89402_420-450_500-530_575-610
ConfigGroup,TurquoiseNeonGreenRubymiRFP,mRuby2,NIDAQDO-Dev1/port0,State,16


# Group: TTL_ERK
# Preset: miRFP
ConfigGroup,TTL_ERK,miRFP,TIFilterBlock1,Label,89402bs
ConfigGroup,TTL_ERK,miRFP,Wheel-A,Label,89402_420-450_500-530_575-610
ConfigGroup,TTL_ERK,miRFP,NIDAQDO-Dev1/port0,State,32

# Preset: CyanStim
ConfigGroup,TTL_ERK,CyanStim,TIFilterBlock1,Label,89402bs
ConfigGroup,TTL_ERK,CyanStim,Wheel-A,Label,is_empty
ConfigGroup,TTL_ERK,CyanStim,NIDAQDO-Dev1/port0,State,4

# Preset: mScarlet3
ConfigGroup,TTL_ERK,mScarlet3,TIFilterBlock1,Label,89402bs
ConfigGroup,TTL_ERK,mScarlet3,Wheel-A,Label,59022_495-545_605-665
ConfigGroup,TTL_ERK,mScarlet3,NIDAQDO-Dev1/port0,State,16

# Preset: BF
ConfigGroup,TTL_ERK,BF,TIFilterBlock1,Label,89402bs
ConfigGroup,TTL_ERK,BF,Wheel-A,Label,is_empty
ConfigGroup,TTL_ERK,BF,NIDAQDO-Dev1/port0,State,64

# Preset: mCitrine
ConfigGroup,TTL_ERK,mCitrine,TIFilterBlock1,Label,89402bs
ConfigGroup,TTL_ERK,mCitrine,Wheel-A,Label,528/38
ConfigGroup,TTL_ERK,mCitrine,NIDAQDO-Dev1/port0,State,8


# Group: Binning
# Camera binning is a global setting (one value per acquisition, since
# the zarr store is allocated with one y/x shape). Keep it out of the
# light-path channel presets and pick a binning explicitly per
# experiment via `mic.mmc.setConfig("Binning", "1x1" | "2x2" | "4x4")`.
# Preset: 1x1
ConfigGroup,Binning,1x1,Camera,Binning,1x1
# Preset: 2x2
ConfigGroup,Binning,2x2,Camera,Binning,2x2
# Preset: 4x4
ConfigGroup,Binning,4x4,Camera,Binning,4x4


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TILightPath,Label,Right100
ConfigGroup,System,Startup,TIXYDrive,SpeedX,2
ConfigGroup,System,Startup,TIXYDrive,SpeedY,2
ConfigGroup,System,Startup,TIXYDrive,ToleranceX,1
ConfigGroup,System,Startup,TIXYDrive,ToleranceY,1
ConfigGroup,System,Startup,TIPFSStatus,FullFocusTimeoutMs,5000.0000
ConfigGroup,System,Startup,TIPFSStatus,FullFocusWaitAfterLockMs,50.0000
ConfigGroup,System,Startup,Wheel-A,Speed,2
ConfigGroup,System,Startup,Core,Shutter,TTL
ConfigGroup,System,Startup,Wheel-A,Delay_ms,400.0000
ConfigGroup,System,Startup,Camera,ReadoutRate,100MHz 16bit
ConfigGroup,System,Startup,Mosaic3,OverlapMode,On
ConfigGroup,System,Startup,Camera,Gain,1-HDR
ConfigGroup,System,Startup,LED,Cyan_Level,99
ConfigGroup,System,Startup,LED,Red_Level,99
ConfigGroup,System,Startup,LED,Violet_Level,99
ConfigGroup,System,Startup,Core,TimeoutMs,5000
ConfigGroup,System,Startup,TTL,State Device,NIDAQDO-Dev1/port0
ConfigGroup,System,Startup,NIDAQDO-Dev1/port0,Blank on,Low
ConfigGroup,System,Startup,NIDAQDO-Dev1/port0,Blanking,On
ConfigGroup,System,Startup,LED,Blue_Level,99
ConfigGroup,System,Startup,LED,Green_Level,99
ConfigGroup,System,Startup,LED,Teal_Level,99
ConfigGroup,System,Startup,Camera,CircularBufferEnabled,OFF
ConfigGroup,System,Startup,TIXYDrive,ExtraDelayMs,500.0000
ConfigGroup,System,Startup,Camera,ExposeOutMode,Rolling Shutter



# PixelSize settings

