# Generated by Configurator on Fri May 02 19:34:23 CEST 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM7,SerialManager,COM7
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,LedDMD,LumencorSpectra,Spectra
Device,Andor sCMOS,AndorSDK3,Andor sCMOS Camera
Device,Wheel-C,SutterLambda,Wheel-C
Device,NIMultiAnalogOutHub,NIMultiAnalog,NIMultiAnalogOutHub
Device,TTL/Red,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao11
Device,TTL/Teal,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao12
Device,TTL/Cyan,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao22
Device,TTL/Violet,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao25
Device,TTL/GreenYellow,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao26
Device,TTL/Blue,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao24
Device,DA TTL Bright,Utilities,DA TTL State Device
Device,TTL/LEDBright,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao8
Device,DA TTL LED,Utilities,DA TTL State Device
Device,LEDBrightTTL,Utilities,State Device Shutter
Device,LEDTTL,Utilities,State Device Shutter
Device,Mosaic3,Mosaic3,Mosaic3

# Pre-init settings for devices
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,128000
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Enable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,LedDMD,Port,COM5
Property,LedDMD,SetLE_Type,Spectra
Property,Wheel-C,Port,COM7
Property,Wheel-C,Timeout(ms),500
Property,NIMultiAnalogOutHub,Device,Dev1
Property,NIMultiAnalogOutHub,MaxSequenceLength,1024
Property,TTL/Red,MaxVolts,5.0000
Property,TTL/Red,MinVolts,0.0000
Property,TTL/Red,Sequencing,Use hub setting
Property,TTL/Teal,MaxVolts,5.0000
Property,TTL/Teal,MinVolts,0.0000
Property,TTL/Teal,Sequencing,Use hub setting
Property,TTL/Cyan,MaxVolts,5.0000
Property,TTL/Cyan,MinVolts,0.0000
Property,TTL/Cyan,Sequencing,Use hub setting
Property,TTL/Violet,MaxVolts,5.0000
Property,TTL/Violet,MinVolts,0.0000
Property,TTL/Violet,Sequencing,Use hub setting
Property,TTL/GreenYellow,MaxVolts,5.0000
Property,TTL/GreenYellow,MinVolts,0.0000
Property,TTL/GreenYellow,Sequencing,Use hub setting
Property,TTL/Blue,MaxVolts,5.0000
Property,TTL/Blue,MinVolts,0.0000
Property,TTL/Blue,Sequencing,Use hub setting
Property,DA TTL Bright,NumberOfDADevices,1
Property,TTL/LEDBright,MaxVolts,5.0000
Property,TTL/LEDBright,MinVolts,0.0000
Property,TTL/LEDBright,Sequencing,Use hub setting
Property,DA TTL LED,NumberOfDADevices,6

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,TTL/Red,NIMultiAnalogOutHub
Parent,TTL/Teal,NIMultiAnalogOutHub
Parent,TTL/Cyan,NIMultiAnalogOutHub
Parent,TTL/Violet,NIMultiAnalogOutHub
Parent,TTL/GreenYellow,NIMultiAnalogOutHub
Parent,TTL/Blue,NIMultiAnalogOutHub
Parent,TTL/LEDBright,NIMultiAnalogOutHub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TIFilterBlock1,250.0

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,Andor sCMOS
Property,Core,Shutter,LedDMD
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,S Plan Fluor 20x NA 0.45 Dry
Label,TINosePiece,4,Plan Apo VC 60x NA 1.40 Oil
Label,TINosePiece,3,Plan Apo 40x NA 0.95 Dry
Label,TINosePiece,2,Plan Apo 20x NA 0.75 Dry
Label,TINosePiece,1,Plan Apo 10x NA 0.45 Dry
Label,TINosePiece,0,Plan Fluor 4x NA 0.13 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,zt 442/514/561
Label,TIFilterBlock1,4,470lp
Label,TIFilterBlock1,3,69308 - CFP/YFP/mCherry - ET
Label,TIFilterBlock1,2,59222 - GFP/mCherry - ET
Label,TIFilterBlock1,1,86000v2 - Sedat Quad
Label,TIFilterBlock1,0,Emptz
# TILightPath
Label,TILightPath,3,Left80
Label,TILightPath,2,Right100
Label,TILightPath,1,Left100
Label,TILightPath,0,Eye100
# Wheel-C
Label,Wheel-C,9,Empty
Label,Wheel-C,8,Empty
Label,Wheel-C,7,Empty
Label,Wheel-C,6,Empty
Label,Wheel-C,5,480/40
Label,Wheel-C,4,528/38
Label,Wheel-C,3,470/24
Label,Wheel-C,2,59022_495-545_605-665
Label,Wheel-C,1,84101m
Label,Wheel-C,0,Empty
# DA TTL Bright
Label,DA TTL Bright,1,On
Label,DA TTL Bright,0,OFF
# DA TTL LED
Label,DA TTL LED,63,On
Label,DA TTL LED,62,62
Label,DA TTL LED,61,61
Label,DA TTL LED,60,60
Label,DA TTL LED,59,59
Label,DA TTL LED,58,58
Label,DA TTL LED,57,57
Label,DA TTL LED,56,56
Label,DA TTL LED,55,55
Label,DA TTL LED,54,54
Label,DA TTL LED,53,53
Label,DA TTL LED,52,52
Label,DA TTL LED,51,51
Label,DA TTL LED,50,50
Label,DA TTL LED,49,49
Label,DA TTL LED,48,48
Label,DA TTL LED,47,47
Label,DA TTL LED,46,46
Label,DA TTL LED,45,45
Label,DA TTL LED,44,44
Label,DA TTL LED,43,43
Label,DA TTL LED,42,42
Label,DA TTL LED,41,41
Label,DA TTL LED,40,40
Label,DA TTL LED,39,39
Label,DA TTL LED,38,38
Label,DA TTL LED,37,37
Label,DA TTL LED,36,36
Label,DA TTL LED,35,35
Label,DA TTL LED,34,34
Label,DA TTL LED,33,33
Label,DA TTL LED,32,Red
Label,DA TTL LED,31,31
Label,DA TTL LED,30,30
Label,DA TTL LED,29,29
Label,DA TTL LED,28,28
Label,DA TTL LED,27,27
Label,DA TTL LED,26,26
Label,DA TTL LED,25,25
Label,DA TTL LED,24,24
Label,DA TTL LED,23,23
Label,DA TTL LED,22,22
Label,DA TTL LED,21,21
Label,DA TTL LED,20,20
Label,DA TTL LED,19,19
Label,DA TTL LED,18,18
Label,DA TTL LED,17,17
Label,DA TTL LED,16,GreenYellow
Label,DA TTL LED,15,15
Label,DA TTL LED,14,14
Label,DA TTL LED,13,13
Label,DA TTL LED,12,12
Label,DA TTL LED,11,11
Label,DA TTL LED,10,10
Label,DA TTL LED,9,9
Label,DA TTL LED,8,Teal
Label,DA TTL LED,7,7
Label,DA TTL LED,6,6
Label,DA TTL LED,5,5
Label,DA TTL LED,4,Cyan
Label,DA TTL LED,3,3
Label,DA TTL LED,2,Blue
Label,DA TTL LED,1,Violet
Label,DA TTL LED,0,OFF

# Configuration presets
# Group: TTL_ERK
# Preset: mScarlet
ConfigGroup,TTL_ERK,mScarlet,TIFilterBlock1,Label,86000v2 - Sedat Quad
ConfigGroup,TTL_ERK,mScarlet,Wheel-C,Label,84101m
ConfigGroup,TTL_ERK,mScarlet,DA TTL Bright,Label,On
ConfigGroup,TTL_ERK,mScarlet,DA TTL LED,Label,GreenYellow
ConfigGroup,TTL_ERK,mScarlet,Core,Shutter,LEDTTL

# Preset: miRFP
ConfigGroup,TTL_ERK,miRFP,TIFilterBlock1,Label,86000v2 - Sedat Quad
ConfigGroup,TTL_ERK,miRFP,Wheel-C,Label,84101m
ConfigGroup,TTL_ERK,miRFP,DA TTL Bright,Label,On
ConfigGroup,TTL_ERK,miRFP,DA TTL LED,Label,Red
ConfigGroup,TTL_ERK,miRFP,Core,Shutter,LEDTTL

# Preset: BF
ConfigGroup,TTL_ERK,BF,TIFilterBlock1,Label,86000v2 - Sedat Quad
ConfigGroup,TTL_ERK,BF,Wheel-C,Label,Empty
ConfigGroup,TTL_ERK,BF,DA TTL Bright,Label,On
ConfigGroup,TTL_ERK,BF,DA TTL LED,Label,OFF
ConfigGroup,TTL_ERK,BF,Core,Shutter,LEDBrightTTL

# Preset: mCitrine
ConfigGroup,TTL_ERK,mCitrine,TIFilterBlock1,Label,69308 - CFP/YFP/mCherry - ET
ConfigGroup,TTL_ERK,mCitrine,Wheel-C,Label,59022_495-545_605-665
ConfigGroup,TTL_ERK,mCitrine,DA TTL Bright,Label,OFF
ConfigGroup,TTL_ERK,mCitrine,DA TTL LED,Label,Teal
ConfigGroup,TTL_ERK,mCitrine,Core,Shutter,LEDTTL


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TILightPath,Label,Right100
ConfigGroup,System,Startup,TIXYDrive,SpeedX,2
ConfigGroup,System,Startup,TIXYDrive,SpeedY,2
ConfigGroup,System,Startup,TIXYDrive,ToleranceX,0
ConfigGroup,System,Startup,TIXYDrive,ToleranceY,0
ConfigGroup,System,Startup,TIPFSStatus,FullFocusTimeoutMs,5000.0000
ConfigGroup,System,Startup,TIPFSStatus,FullFocusWaitAfterLockMs,100.0000
ConfigGroup,System,Startup,Wheel-C,Speed,3
ConfigGroup,System,Startup,DA TTL Bright,DADevice-0,TTL/LEDBright
ConfigGroup,System,Startup,DA TTL Bright,Label,OFF
ConfigGroup,System,Startup,DA TTL LED,DADevice-0,TTL/Violet
ConfigGroup,System,Startup,DA TTL LED,DADevice-1,TTL/Blue
ConfigGroup,System,Startup,DA TTL LED,DADevice-2,TTL/Cyan
ConfigGroup,System,Startup,DA TTL LED,DADevice-3,TTL/Teal
ConfigGroup,System,Startup,DA TTL LED,DADevice-4,TTL/GreenYellow
ConfigGroup,System,Startup,DA TTL LED,DADevice-5,TTL/Red
ConfigGroup,System,Startup,DA TTL LED,Label,OFF
ConfigGroup,System,Startup,LEDBrightTTL,State Device,DA TTL Bright
ConfigGroup,System,Startup,LEDTTL,State Device,DA TTL LED
ConfigGroup,System,Startup,Core,Shutter,LEDTTL
ConfigGroup,System,Startup,Andor sCMOS,Binning,2x2
ConfigGroup,System,Startup,Andor sCMOS,PixelReadoutRate,200 MHz - lowest noise
ConfigGroup,System,Startup,Andor sCMOS,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)
ConfigGroup,System,Startup,Wheel-C,Delay_ms,200.00
ConfigGroup,System,Startup,Mosaic3,ExposureTime,200.00
ConfigGroup,System,Startup,Mosaic3,GrayScaleExposureTime,0.05
ConfigGroup,System,Startup,Mosaic3,OperationMode,FrameSequence
ConfigGroup,System,Startup,Mosaic3,OverlapMode,On
ConfigGroup,System,Startup,Mosaic3,PixelMode,256Grays



# PixelSize settings

