# Generated by Configurator on Thu Feb 20 16:47:34 CET 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM3,SerialManager,COM3
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Laser,Lumencor,LightEngine
Device,Nosepiece,NikonTi2,Nosepiece
Device,CondenserTurret,NikonTi2,CondenserTurret
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,LappMainBranch1,NikonTi2,LappMainBranch1
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,CARVII Hub,CARVII,CARVII Hub
Device,CARVII Em filter,CARVII,CARVII Em filter
Device,CARVII Spin motor,CARVII,CARVII Spin motor
Device,MightexPolygon1000,MightexPolygon1000,MightexPolygon1000
Device,LedDMD,LumencorSpectra,Spectra
Device,DA TTL Laser,Utilities,DA TTL State Device
Device,DA TTL LedDMD,Utilities,DA TTL State Device
Device,DA TTL LEDBright,Utilities,DA TTL State Device
Device,LedDMD TTL,Utilities,State Device Shutter
Device,LEDBright TTL,Utilities,State Device Shutter
Device,Laser TTL,Utilities,State Device Shutter
Device,PiezoStage,Utilities,DA Z Stage
Device,NIMultiAnalogOutHub,NIMultiAnalog,NIMultiAnalogOutHub
Device,TTL/Laser/Violet,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao0
Device,TTL/Laser/Cyan,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao2
Device,TTL/Laser/Green,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao4
Device,TTL/Laser/Red,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao5
Device,TTL/LedDMD/Violet,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao8
Device,TTL/LedDMD/Blue,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao9
Device,TTL/LedDMD/Cyan,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao10
Device,TTL/LedDMD/Teal,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao11
Device,TTL/LedDMD/GreenYellow,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao12
Device,TTL/LedDMD/Red,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao13
Device,TTL/LEDBright,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao16
Device,TTL/zPiezo,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao28

# Pre-init settings for devices
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM3,AnswerTimeout,1000
Property,COM3,BaudRate,115200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,XYStage,Invert-X,No
Property,XYStage,Invert-Y,No
Property,Laser,Connection,192.168.201.200
Property,Laser,Model,GEN3
Property,CARVII Hub,Port,COM3
Property,LedDMD,Port,COM5
Property,LedDMD,SetLE_Type,SpectraX
Property,DA TTL Laser,NumberOfDADevices,4
Property,DA TTL LedDMD,NumberOfDADevices,6
Property,DA TTL LEDBright,NumberOfDADevices,1
Property,PiezoStage,Stage High Position(um),200.0000
Property,PiezoStage,Stage High Voltage,10.0000
Property,PiezoStage,Stage Low Position(um),0.0000
Property,PiezoStage,Stage Low Voltage,0.0000
Property,NIMultiAnalogOutHub,Device,Dev1
Property,NIMultiAnalogOutHub,MaxSequenceLength,1024
Property,TTL/Laser/Violet,MaxVolts,5.0000
Property,TTL/Laser/Violet,MinVolts,0.0000
Property,TTL/Laser/Violet,Sequencing,Use hub setting
Property,TTL/Laser/Cyan,MaxVolts,5.0000
Property,TTL/Laser/Cyan,MinVolts,0.0000
Property,TTL/Laser/Cyan,Sequencing,Use hub setting
Property,TTL/Laser/Green,MaxVolts,5.0000
Property,TTL/Laser/Green,MinVolts,0.0000
Property,TTL/Laser/Green,Sequencing,Use hub setting
Property,TTL/Laser/Red,MaxVolts,5.0000
Property,TTL/Laser/Red,MinVolts,0.0000
Property,TTL/Laser/Red,Sequencing,Use hub setting
Property,TTL/LedDMD/Violet,MaxVolts,5.0000
Property,TTL/LedDMD/Violet,MinVolts,0.0000
Property,TTL/LedDMD/Violet,Sequencing,Use hub setting
Property,TTL/LedDMD/Blue,MaxVolts,5.0000
Property,TTL/LedDMD/Blue,MinVolts,0.0000
Property,TTL/LedDMD/Blue,Sequencing,Use hub setting
Property,TTL/LedDMD/Cyan,MaxVolts,5.0000
Property,TTL/LedDMD/Cyan,MinVolts,0.0000
Property,TTL/LedDMD/Cyan,Sequencing,Use hub setting
Property,TTL/LedDMD/Teal,MaxVolts,5.0000
Property,TTL/LedDMD/Teal,MinVolts,0.0000
Property,TTL/LedDMD/Teal,Sequencing,Use hub setting
Property,TTL/LedDMD/GreenYellow,MaxVolts,5.0000
Property,TTL/LedDMD/GreenYellow,MinVolts,0.0000
Property,TTL/LedDMD/GreenYellow,Sequencing,Use hub setting
Property,TTL/LedDMD/Red,MaxVolts,5.0000
Property,TTL/LedDMD/Red,MinVolts,0.0000
Property,TTL/LedDMD/Red,Sequencing,Use hub setting
Property,TTL/LEDBright,MaxVolts,5.0000
Property,TTL/LEDBright,MinVolts,0.0000
Property,TTL/LEDBright,Sequencing,Use hub setting
Property,TTL/zPiezo,MaxVolts,10.0000
Property,TTL/zPiezo,MinVolts,0.0000
Property,TTL/zPiezo,Sequencing,Use hub setting

# Pre-init settings for COM ports

# Hub (parent) references
Parent,ZDrive,Ti2-E__0
Parent,XYStage,Ti2-E__0
Parent,Nosepiece,Ti2-E__0
Parent,CondenserTurret,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,IntermediateMagnification,Ti2-E__0
Parent,LappMainBranch1,Ti2-E__0
Parent,TTL/Laser/Violet,NIMultiAnalogOutHub
Parent,TTL/Laser/Cyan,NIMultiAnalogOutHub
Parent,TTL/Laser/Green,NIMultiAnalogOutHub
Parent,TTL/Laser/Red,NIMultiAnalogOutHub
Parent,TTL/LedDMD/Violet,NIMultiAnalogOutHub
Parent,TTL/LedDMD/Blue,NIMultiAnalogOutHub
Parent,TTL/LedDMD/Cyan,NIMultiAnalogOutHub
Parent,TTL/LedDMD/Teal,NIMultiAnalogOutHub
Parent,TTL/LedDMD/GreenYellow,NIMultiAnalogOutHub
Parent,TTL/LedDMD/Red,NIMultiAnalogOutHub
Parent,TTL/LEDBright,NIMultiAnalogOutHub
Parent,TTL/zPiezo,NIMultiAnalogOutHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0
FocusDirection,PiezoStage,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Laser TTL
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-
Label,Nosepiece,4,5-
Label,Nosepiece,3,4-
Label,Nosepiece,2,3-Plan Apo LmbdD0.25 40x
Label,Nosepiece,1,2-Plan Apo LmbdD0.80 20x
Label,Nosepiece,0,1-Plan Apo LmbdD4.00 10x
# CondenserTurret
Label,CondenserTurret,6,7-Shutter
Label,CondenserTurret,5,6-ND
Label,CondenserTurret,4,5-
Label,CondenserTurret,3,4-
Label,CondenserTurret,2,3-
Label,CondenserTurret,1,2-
Label,CondenserTurret,0,1-OPEN
# FilterTurret1
Label,FilterTurret1,5,6-Empty
Label,FilterTurret1,4,Q505 LP
Label,FilterTurret1,3,4-Empty
Label,FilterTurret1,2,3-Empty
Label,FilterTurret1,1,2-MXR00543 -Empty
Label,FilterTurret1,0,1-Empty
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE
# LappMainBranch1
Label,LappMainBranch1,1,EPI
Label,LappMainBranch1,0,DMD
# CARVII Em filter
Label,CARVII Em filter,7,EmFilter-7
Label,CARVII Em filter,6,EmFilter-6
Label,CARVII Em filter,5,EmFilter-5
Label,CARVII Em filter,4,CELESTA-DA/FI/TR/Cy5/Cy7
Label,CARVII Em filter,3,685/40
Label,CARVII Em filter,2,595/31
Label,CARVII Em filter,1,511/20
Label,CARVII Em filter,0,Empty
# CARVII Spin motor
Label,CARVII Spin motor,1,On (spinning)
Label,CARVII Spin motor,0,Off (no spin)
# DA TTL Laser
Label,DA TTL Laser,15,ON
Label,DA TTL Laser,14,14
Label,DA TTL Laser,13,13
Label,DA TTL Laser,12,12
Label,DA TTL Laser,11,11
Label,DA TTL Laser,10,10
Label,DA TTL Laser,9,9
Label,DA TTL Laser,8,Red
Label,DA TTL Laser,7,7
Label,DA TTL Laser,6,6
Label,DA TTL Laser,5,5
Label,DA TTL Laser,4,Green
Label,DA TTL Laser,3,3
Label,DA TTL Laser,2,Cyan
Label,DA TTL Laser,1,Violet
Label,DA TTL Laser,0,OFF
# DA TTL LedDMD
Label,DA TTL LedDMD,63,ON
Label,DA TTL LedDMD,62,62
Label,DA TTL LedDMD,61,61
Label,DA TTL LedDMD,60,60
Label,DA TTL LedDMD,59,59
Label,DA TTL LedDMD,58,58
Label,DA TTL LedDMD,57,57
Label,DA TTL LedDMD,56,56
Label,DA TTL LedDMD,55,55
Label,DA TTL LedDMD,54,54
Label,DA TTL LedDMD,53,53
Label,DA TTL LedDMD,52,52
Label,DA TTL LedDMD,51,51
Label,DA TTL LedDMD,50,50
Label,DA TTL LedDMD,49,49
Label,DA TTL LedDMD,48,48
Label,DA TTL LedDMD,47,47
Label,DA TTL LedDMD,46,46
Label,DA TTL LedDMD,45,45
Label,DA TTL LedDMD,44,44
Label,DA TTL LedDMD,43,43
Label,DA TTL LedDMD,42,42
Label,DA TTL LedDMD,41,41
Label,DA TTL LedDMD,40,40
Label,DA TTL LedDMD,39,39
Label,DA TTL LedDMD,38,38
Label,DA TTL LedDMD,37,37
Label,DA TTL LedDMD,36,36
Label,DA TTL LedDMD,35,35
Label,DA TTL LedDMD,34,34
Label,DA TTL LedDMD,33,33
Label,DA TTL LedDMD,32,Red
Label,DA TTL LedDMD,31,31
Label,DA TTL LedDMD,30,30
Label,DA TTL LedDMD,29,29
Label,DA TTL LedDMD,28,28
Label,DA TTL LedDMD,27,27
Label,DA TTL LedDMD,26,26
Label,DA TTL LedDMD,25,25
Label,DA TTL LedDMD,24,24
Label,DA TTL LedDMD,23,23
Label,DA TTL LedDMD,22,22
Label,DA TTL LedDMD,21,21
Label,DA TTL LedDMD,20,20
Label,DA TTL LedDMD,19,19
Label,DA TTL LedDMD,18,18
Label,DA TTL LedDMD,17,17
Label,DA TTL LedDMD,16,GreenYellow
Label,DA TTL LedDMD,15,15
Label,DA TTL LedDMD,14,14
Label,DA TTL LedDMD,13,13
Label,DA TTL LedDMD,12,12
Label,DA TTL LedDMD,11,11
Label,DA TTL LedDMD,10,10
Label,DA TTL LedDMD,9,9
Label,DA TTL LedDMD,8,Teal
Label,DA TTL LedDMD,7,7
Label,DA TTL LedDMD,6,6
Label,DA TTL LedDMD,5,5
Label,DA TTL LedDMD,4,Cyan
Label,DA TTL LedDMD,3,3
Label,DA TTL LedDMD,2,Blue
Label,DA TTL LedDMD,1,Violet
Label,DA TTL LedDMD,0,OFF
# DA TTL LEDBright
Label,DA TTL LEDBright,1,ON
Label,DA TTL LEDBright,0,OFF

# Configuration presets
# Group: CF_DMD
# Preset: Green
ConfigGroup,CF_DMD,Green,CondenserTurret,Label,7-Shutter
ConfigGroup,CF_DMD,Green,FilterTurret1,Label,Q505 LP
ConfigGroup,CF_DMD,Green,CARVII Em filter,Label,595/31
ConfigGroup,CF_DMD,Green,DA TTL Laser,Label,Green
ConfigGroup,CF_DMD,Green,DA TTL LedDMD,Label,OFF
ConfigGroup,CF_DMD,Green,DA TTL LEDBright,Label,OFF
ConfigGroup,CF_DMD,Green,Core,Shutter,Laser TTL
ConfigGroup,CF_DMD,Green,CARVII Spin motor,Label,On (spinning)

# Preset: Cyan
ConfigGroup,CF_DMD,Cyan,CARVII Em filter,Label,511/20
ConfigGroup,CF_DMD,Cyan,CondenserTurret,Label,7-Shutter
ConfigGroup,CF_DMD,Cyan,FilterTurret1,Label,1-Empty
ConfigGroup,CF_DMD,Cyan,DA TTL Laser,Label,Cyan
ConfigGroup,CF_DMD,Cyan,DA TTL LedDMD,Label,OFF
ConfigGroup,CF_DMD,Cyan,DA TTL LEDBright,Label,OFF
ConfigGroup,CF_DMD,Cyan,Core,Shutter,Laser TTL
ConfigGroup,CF_DMD,Cyan,CARVII Spin motor,Label,On (spinning)

# Preset: Red
ConfigGroup,CF_DMD,Red,CondenserTurret,Label,7-Shutter
ConfigGroup,CF_DMD,Red,FilterTurret1,Label,Q505 LP
ConfigGroup,CF_DMD,Red,CARVII Em filter,Label,685/40
ConfigGroup,CF_DMD,Red,DA TTL Laser,Label,Red
ConfigGroup,CF_DMD,Red,DA TTL LedDMD,Label,OFF
ConfigGroup,CF_DMD,Red,DA TTL LEDBright,Label,OFF
ConfigGroup,CF_DMD,Red,Core,Shutter,Laser TTL
ConfigGroup,CF_DMD,Red,CARVII Spin motor,Label,On (spinning)

# Preset: CyanStim
ConfigGroup,CF_DMD,CyanStim,CondenserTurret,Label,7-Shutter
ConfigGroup,CF_DMD,CyanStim,FilterTurret1,Label,Q505 LP
ConfigGroup,CF_DMD,CyanStim,DA TTL Laser,Label,OFF
ConfigGroup,CF_DMD,CyanStim,DA TTL LedDMD,Label,Cyan
ConfigGroup,CF_DMD,CyanStim,DA TTL LEDBright,Label,OFF
ConfigGroup,CF_DMD,CyanStim,Core,Shutter,LedDMD TTL
ConfigGroup,CF_DMD,CyanStim,CARVII Em filter,Label,511/20
ConfigGroup,CF_DMD,CyanStim,CARVII Spin motor,Label,On (spinning)

# Preset: BF
ConfigGroup,CF_DMD,BF,Core,Shutter,LEDBright TTL
ConfigGroup,CF_DMD,BF,CondenserTurret,Label,1-OPEN
ConfigGroup,CF_DMD,BF,FilterTurret1,Label,1-Empty
ConfigGroup,CF_DMD,BF,DA TTL Laser,Label,OFF
ConfigGroup,CF_DMD,BF,DA TTL LedDMD,Label,OFF
ConfigGroup,CF_DMD,BF,DA TTL LEDBright,Label,ON
ConfigGroup,CF_DMD,BF,CARVII Em filter,Label,Empty
ConfigGroup,CF_DMD,BF,CARVII Spin motor,Label,On (spinning)


# Group: WF_TTL
# Preset: Green
ConfigGroup,WF_TTL,Green,CondenserTurret,Label,7-Shutter
ConfigGroup,WF_TTL,Green,FilterTurret1,Label,1-Empty
ConfigGroup,WF_TTL,Green,CARVII Em filter,Label,595/31
ConfigGroup,WF_TTL,Green,DA TTL Laser,Label,Green
ConfigGroup,WF_TTL,Green,DA TTL LedDMD,Label,OFF
ConfigGroup,WF_TTL,Green,DA TTL LEDBright,Label,OFF
ConfigGroup,WF_TTL,Green,Core,Shutter,Laser TTL
ConfigGroup,WF_TTL,Green,CARVII Spin motor,Label,Off (no spin)

# Preset: Multi
ConfigGroup,WF_TTL,Multi,CondenserTurret,Label,7-Shutter
ConfigGroup,WF_TTL,Multi,FilterTurret1,Label,1-Empty
ConfigGroup,WF_TTL,Multi,CARVII Em filter,Label,CELESTA-DA/FI/TR/Cy5/Cy7
ConfigGroup,WF_TTL,Multi,DA TTL Laser,Label,ON
ConfigGroup,WF_TTL,Multi,DA TTL LedDMD,Label,OFF
ConfigGroup,WF_TTL,Multi,DA TTL LEDBright,Label,OFF
ConfigGroup,WF_TTL,Multi,Core,Shutter,Laser TTL
ConfigGroup,WF_TTL,Multi,CARVII Spin motor,Label,Off (no spin)

# Preset: Cyan
ConfigGroup,WF_TTL,Cyan,FilterTurret1,Label,1-Empty
ConfigGroup,WF_TTL,Cyan,CARVII Em filter,Label,511/20
ConfigGroup,WF_TTL,Cyan,CondenserTurret,Label,7-Shutter
ConfigGroup,WF_TTL,Cyan,DA TTL Laser,Label,Cyan
ConfigGroup,WF_TTL,Cyan,DA TTL LedDMD,Label,OFF
ConfigGroup,WF_TTL,Cyan,DA TTL LEDBright,Label,OFF
ConfigGroup,WF_TTL,Cyan,Core,Shutter,Laser TTL
ConfigGroup,WF_TTL,Cyan,CARVII Spin motor,Label,Off (no spin)

# Preset: Red
ConfigGroup,WF_TTL,Red,CondenserTurret,Label,7-Shutter
ConfigGroup,WF_TTL,Red,FilterTurret1,Label,1-Empty
ConfigGroup,WF_TTL,Red,DA TTL Laser,Label,Red
ConfigGroup,WF_TTL,Red,DA TTL LedDMD,Label,OFF
ConfigGroup,WF_TTL,Red,DA TTL LEDBright,Label,OFF
ConfigGroup,WF_TTL,Red,Core,Shutter,Laser TTL
ConfigGroup,WF_TTL,Red,CARVII Em filter,Label,685/40
ConfigGroup,WF_TTL,Red,CARVII Spin motor,Label,Off (no spin)

# Preset: BF
ConfigGroup,WF_TTL,BF,Core,Shutter,LEDBright TTL
ConfigGroup,WF_TTL,BF,CondenserTurret,Label,1-OPEN
ConfigGroup,WF_TTL,BF,FilterTurret1,Label,1-Empty
ConfigGroup,WF_TTL,BF,DA TTL Laser,Label,OFF
ConfigGroup,WF_TTL,BF,DA TTL LedDMD,Label,OFF
ConfigGroup,WF_TTL,BF,DA TTL LEDBright,Label,ON
ConfigGroup,WF_TTL,BF,CARVII Em filter,Label,Empty
ConfigGroup,WF_TTL,BF,CARVII Spin motor,Label,Off (no spin)

# Preset: Violet
ConfigGroup,WF_TTL,Violet,CondenserTurret,Label,7-Shutter
ConfigGroup,WF_TTL,Violet,FilterTurret1,Label,1-Empty
ConfigGroup,WF_TTL,Violet,CARVII Em filter,Label,CELESTA-DA/FI/TR/Cy5/Cy7
ConfigGroup,WF_TTL,Violet,DA TTL Laser,Label,Violet
ConfigGroup,WF_TTL,Violet,DA TTL LedDMD,Label,OFF
ConfigGroup,WF_TTL,Violet,DA TTL LEDBright,Label,OFF
ConfigGroup,WF_TTL,Violet,Core,Shutter,Laser TTL
ConfigGroup,WF_TTL,Violet,CARVII Spin motor,Label,Off (no spin)


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,DA TTL Laser,DADevice-0,TTL/Laser/Violet
ConfigGroup,System,Startup,DA TTL Laser,DADevice-1,TTL/Laser/Cyan
ConfigGroup,System,Startup,DA TTL Laser,DADevice-2,TTL/Laser/Green
ConfigGroup,System,Startup,DA TTL Laser,DADevice-3,TTL/Laser/Red
ConfigGroup,System,Startup,DA TTL LedDMD,DADevice-0,TTL/LedDMD/Violet
ConfigGroup,System,Startup,DA TTL LedDMD,DADevice-1,TTL/LedDMD/Blue
ConfigGroup,System,Startup,DA TTL LedDMD,DADevice-2,TTL/LedDMD/Cyan
ConfigGroup,System,Startup,DA TTL LedDMD,DADevice-3,TTL/LedDMD/Teal
ConfigGroup,System,Startup,DA TTL LedDMD,DADevice-4,TTL/LedDMD/GreenYellow
ConfigGroup,System,Startup,DA TTL LedDMD,DADevice-5,TTL/LedDMD/Red
ConfigGroup,System,Startup,DA TTL LEDBright,DADevice-0,TTL/LEDBright
ConfigGroup,System,Startup,LedDMD TTL,State Device,DA TTL LedDMD
ConfigGroup,System,Startup,LEDBright TTL,State Device,DA TTL LEDBright
ConfigGroup,System,Startup,Laser TTL,State Device,DA TTL Laser
ConfigGroup,System,Startup,Turret1Shutter,State,1
ConfigGroup,System,Startup,LightPath,Label,4-L100
ConfigGroup,System,Startup,LappMainBranch1,Label,DMD
ConfigGroup,System,Startup,LedDMD,Blue_Level,0
ConfigGroup,System,Startup,LedDMD,Cyan_Level,0
ConfigGroup,System,Startup,LedDMD,Green_Level,0
ConfigGroup,System,Startup,LedDMD,Red_Level,0
ConfigGroup,System,Startup,LedDMD,Teal_Level,0
ConfigGroup,System,Startup,LedDMD,Violet_Level,0
ConfigGroup,System,Startup,LedDMD,White_Level,0
ConfigGroup,System,Startup,PiezoStage,DA Device,TTL/zPiezo
ConfigGroup,System,Startup,PiezoStage,Position,100.0000
ConfigGroup,System,Startup,ZDrive,Speed,2.50mm/sec
ConfigGroup,System,Startup,XYStage,Speed,1.00mm/sec
ConfigGroup,System,Startup,Laser,State,1
ConfigGroup,System,Startup,CARVII Em filter,Label,Empty
ConfigGroup,System,Startup,CARVII Spin motor,Label,Off (no spin)
ConfigGroup,System,Startup,PFS,LEDIntensity,85
ConfigGroup,System,Startup,ZDrive,Tolerance,0.000um
ConfigGroup,System,Startup,XYStage,Tolerance,0.000um
ConfigGroup,System,Startup,PFS,DichroicMirrorInserted,Yes

# Preset: Shutdown
ConfigGroup,System,Shutdown,ZDrive,Speed,2.00mm/sec
ConfigGroup,System,Shutdown,XYStage,Speed,12.00mm/sec
ConfigGroup,System,Shutdown,Laser,State,0
ConfigGroup,System,Shutdown,Turret1Shutter,State,1
ConfigGroup,System,Shutdown,LightPath,Label,4-L100
ConfigGroup,System,Shutdown,LappMainBranch1,Label,DMD
ConfigGroup,System,Shutdown,CARVII Em filter,Label,Empty
ConfigGroup,System,Shutdown,CARVII Spin motor,Label,Off (no spin)
ConfigGroup,System,Shutdown,LedDMD,Blue_Level,0
ConfigGroup,System,Shutdown,LedDMD,Cyan_Level,0
ConfigGroup,System,Shutdown,LedDMD,Green_Level,0
ConfigGroup,System,Shutdown,LedDMD,Red_Level,0
ConfigGroup,System,Shutdown,LedDMD,Teal_Level,0
ConfigGroup,System,Shutdown,LedDMD,Violet_Level,0
ConfigGroup,System,Shutdown,LedDMD,White_Level,0
ConfigGroup,System,Shutdown,DA TTL Laser,DADevice-0,TTL/Laser/Violet
ConfigGroup,System,Shutdown,DA TTL Laser,DADevice-1,TTL/Laser/Cyan
ConfigGroup,System,Shutdown,DA TTL Laser,DADevice-2,TTL/Laser/Green
ConfigGroup,System,Shutdown,DA TTL Laser,DADevice-3,TTL/Laser/Red
ConfigGroup,System,Shutdown,DA TTL LedDMD,DADevice-0,TTL/LedDMD/Violet
ConfigGroup,System,Shutdown,DA TTL LedDMD,DADevice-1,TTL/LedDMD/Blue
ConfigGroup,System,Shutdown,DA TTL LedDMD,DADevice-2,TTL/LedDMD/Cyan
ConfigGroup,System,Shutdown,DA TTL LedDMD,DADevice-3,TTL/LedDMD/Teal
ConfigGroup,System,Shutdown,DA TTL LedDMD,DADevice-4,TTL/LedDMD/GreenYellow
ConfigGroup,System,Shutdown,DA TTL LedDMD,DADevice-5,TTL/LedDMD/Red
ConfigGroup,System,Shutdown,DA TTL LEDBright,DADevice-0,TTL/LEDBright
ConfigGroup,System,Shutdown,LedDMD TTL,State Device,DA TTL LedDMD
ConfigGroup,System,Shutdown,LEDBright TTL,State Device,DA TTL LEDBright
ConfigGroup,System,Shutdown,Laser TTL,State Device,DA TTL Laser
ConfigGroup,System,Shutdown,PiezoStage,DA Device,TTL/zPiezo
ConfigGroup,System,Shutdown,PiezoStage,Position,100.0000
ConfigGroup,System,Shutdown,PFS,LEDIntensity,20
ConfigGroup,System,Shutdown,ZDrive,Tolerance,0.000um
ConfigGroup,System,Shutdown,XYStage,Tolerance,0.000um
ConfigGroup,System,Shutdown,PFS,DichroicMirrorInserted,Yes


# Group: WF_DMD
# Preset: Green
ConfigGroup,WF_DMD,Green,CondenserTurret,Label,7-Shutter
ConfigGroup,WF_DMD,Green,FilterTurret1,Label,Q505 LP
ConfigGroup,WF_DMD,Green,CARVII Em filter,Label,595/31
ConfigGroup,WF_DMD,Green,DA TTL Laser,Label,Green
ConfigGroup,WF_DMD,Green,DA TTL LedDMD,Label,OFF
ConfigGroup,WF_DMD,Green,DA TTL LEDBright,Label,OFF
ConfigGroup,WF_DMD,Green,Core,Shutter,Laser TTL
ConfigGroup,WF_DMD,Green,CARVII Spin motor,Label,Off (no spin)

# Preset: Cyan
ConfigGroup,WF_DMD,Cyan,CARVII Em filter,Label,511/20
ConfigGroup,WF_DMD,Cyan,CondenserTurret,Label,7-Shutter
ConfigGroup,WF_DMD,Cyan,FilterTurret1,Label,1-Empty
ConfigGroup,WF_DMD,Cyan,DA TTL Laser,Label,Cyan
ConfigGroup,WF_DMD,Cyan,DA TTL LedDMD,Label,OFF
ConfigGroup,WF_DMD,Cyan,DA TTL LEDBright,Label,OFF
ConfigGroup,WF_DMD,Cyan,Core,Shutter,Laser TTL
ConfigGroup,WF_DMD,Cyan,CARVII Spin motor,Label,Off (no spin)

# Preset: Red
ConfigGroup,WF_DMD,Red,CondenserTurret,Label,7-Shutter
ConfigGroup,WF_DMD,Red,FilterTurret1,Label,Q505 LP
ConfigGroup,WF_DMD,Red,CARVII Em filter,Label,685/40
ConfigGroup,WF_DMD,Red,DA TTL Laser,Label,Red
ConfigGroup,WF_DMD,Red,DA TTL LedDMD,Label,OFF
ConfigGroup,WF_DMD,Red,DA TTL LEDBright,Label,OFF
ConfigGroup,WF_DMD,Red,Core,Shutter,Laser TTL
ConfigGroup,WF_DMD,Red,CARVII Spin motor,Label,Off (no spin)

# Preset: CyanStim
ConfigGroup,WF_DMD,CyanStim,CondenserTurret,Label,7-Shutter
ConfigGroup,WF_DMD,CyanStim,FilterTurret1,Label,Q505 LP
ConfigGroup,WF_DMD,CyanStim,DA TTL Laser,Label,OFF
ConfigGroup,WF_DMD,CyanStim,DA TTL LedDMD,Label,Cyan
ConfigGroup,WF_DMD,CyanStim,DA TTL LEDBright,Label,OFF
ConfigGroup,WF_DMD,CyanStim,Core,Shutter,LedDMD TTL
ConfigGroup,WF_DMD,CyanStim,CARVII Em filter,Label,511/20
ConfigGroup,WF_DMD,CyanStim,CARVII Spin motor,Label,Off (no spin)

# Preset: BF
ConfigGroup,WF_DMD,BF,Core,Shutter,LEDBright TTL
ConfigGroup,WF_DMD,BF,CondenserTurret,Label,1-OPEN
ConfigGroup,WF_DMD,BF,FilterTurret1,Label,1-Empty
ConfigGroup,WF_DMD,BF,DA TTL Laser,Label,OFF
ConfigGroup,WF_DMD,BF,DA TTL LedDMD,Label,OFF
ConfigGroup,WF_DMD,BF,DA TTL LEDBright,Label,ON
ConfigGroup,WF_DMD,BF,CARVII Em filter,Label,Empty
ConfigGroup,WF_DMD,BF,CARVII Spin motor,Label,Off (no spin)


# Group: CF_TTL
# Preset: Green
ConfigGroup,CF_TTL,Green,CondenserTurret,Label,7-Shutter
ConfigGroup,CF_TTL,Green,FilterTurret1,Label,1-Empty
ConfigGroup,CF_TTL,Green,CARVII Em filter,Label,595/31
ConfigGroup,CF_TTL,Green,DA TTL Laser,Label,Green
ConfigGroup,CF_TTL,Green,DA TTL LedDMD,Label,OFF
ConfigGroup,CF_TTL,Green,DA TTL LEDBright,Label,OFF
ConfigGroup,CF_TTL,Green,Core,Shutter,Laser TTL
ConfigGroup,CF_TTL,Green,CARVII Spin motor,Label,On (spinning)

# Preset: Multi
ConfigGroup,CF_TTL,Multi,CondenserTurret,Label,7-Shutter
ConfigGroup,CF_TTL,Multi,FilterTurret1,Label,1-Empty
ConfigGroup,CF_TTL,Multi,CARVII Em filter,Label,CELESTA-DA/FI/TR/Cy5/Cy7
ConfigGroup,CF_TTL,Multi,DA TTL Laser,Label,ON
ConfigGroup,CF_TTL,Multi,DA TTL LedDMD,Label,OFF
ConfigGroup,CF_TTL,Multi,DA TTL LEDBright,Label,OFF
ConfigGroup,CF_TTL,Multi,Core,Shutter,Laser TTL
ConfigGroup,CF_TTL,Multi,CARVII Spin motor,Label,On (spinning)

# Preset: Cyan
ConfigGroup,CF_TTL,Cyan,FilterTurret1,Label,1-Empty
ConfigGroup,CF_TTL,Cyan,CARVII Em filter,Label,511/20
ConfigGroup,CF_TTL,Cyan,CondenserTurret,Label,7-Shutter
ConfigGroup,CF_TTL,Cyan,DA TTL Laser,Label,Cyan
ConfigGroup,CF_TTL,Cyan,DA TTL LedDMD,Label,OFF
ConfigGroup,CF_TTL,Cyan,DA TTL LEDBright,Label,OFF
ConfigGroup,CF_TTL,Cyan,Core,Shutter,Laser TTL
ConfigGroup,CF_TTL,Cyan,CARVII Spin motor,Label,On (spinning)

# Preset: Red
ConfigGroup,CF_TTL,Red,CondenserTurret,Label,7-Shutter
ConfigGroup,CF_TTL,Red,FilterTurret1,Label,1-Empty
ConfigGroup,CF_TTL,Red,DA TTL Laser,Label,Red
ConfigGroup,CF_TTL,Red,DA TTL LedDMD,Label,OFF
ConfigGroup,CF_TTL,Red,DA TTL LEDBright,Label,OFF
ConfigGroup,CF_TTL,Red,Core,Shutter,Laser TTL
ConfigGroup,CF_TTL,Red,CARVII Em filter,Label,685/40
ConfigGroup,CF_TTL,Red,CARVII Spin motor,Label,On (spinning)

# Preset: BF
ConfigGroup,CF_TTL,BF,Core,Shutter,LEDBright TTL
ConfigGroup,CF_TTL,BF,CondenserTurret,Label,1-OPEN
ConfigGroup,CF_TTL,BF,FilterTurret1,Label,1-Empty
ConfigGroup,CF_TTL,BF,DA TTL Laser,Label,OFF
ConfigGroup,CF_TTL,BF,DA TTL LedDMD,Label,OFF
ConfigGroup,CF_TTL,BF,DA TTL LEDBright,Label,ON
ConfigGroup,CF_TTL,BF,CARVII Em filter,Label,Empty
ConfigGroup,CF_TTL,BF,CARVII Spin motor,Label,On (spinning)

# Preset: Violet
ConfigGroup,CF_TTL,Violet,CondenserTurret,Label,7-Shutter
ConfigGroup,CF_TTL,Violet,FilterTurret1,Label,1-Empty
ConfigGroup,CF_TTL,Violet,CARVII Em filter,Label,CELESTA-DA/FI/TR/Cy5/Cy7
ConfigGroup,CF_TTL,Violet,DA TTL Laser,Label,Violet
ConfigGroup,CF_TTL,Violet,DA TTL LedDMD,Label,OFF
ConfigGroup,CF_TTL,Violet,DA TTL LEDBright,Label,OFF
ConfigGroup,CF_TTL,Violet,Core,Shutter,Laser TTL
ConfigGroup,CF_TTL,Violet,CARVII Spin motor,Label,On (spinning)



# PixelSize settings

